# stn parameters
par vl=-60,vna=55,vk=-80,thetam=30,sm=15
par vcl=-71
par gl=2.25,gna=50,gk=40,tn=1,th=0.05
par gahp=9,gca=0.5,vca=140,k1=15,eps=5e-05
par kca=22.5,thetas=39,ss=2,xp=1,i=0,ssca=8
par thetah=-39,sh=3.1,thetan=-32,sn=-8
par taun0=1,taun1=100,thn=80,sigman=26
par tauh0=1,tauh1=500,thh=57,sigmah=3,phi=5
par thetat=-63,kt=-7.8,gt=0.5,phir=2
par thetar=-67,kr=2,taur0=7.1,taur1=17.5,thr=-68,sigmar=2.2
par alpha=5,beta=1,ab=-30,gsyn=0.5, vsyn=-100
par rth=0.25,rsig=-0.07,i1=0,rho1=0.5,a1=0.9
par Istn=10
par peegamp=1,neegamp=0,samp2=0,freq2=0.09,samp1=0,freq1=0.15,amp=0
par dir0=1,dir1=-1,dir2=1,dir3=-1,dir4=1,dir5=-1,dir6=1,dir7=-1,dir8=1,dir9=-1

# gp parameters
par gnag=120,gkg=30,gahpg=30,gtg=0.5,gcag=0.1,glg=0.1
par vnag=55,vkg=-80,vcag=120,vlg=-55
par thetasg=-57,ksg=2,thetas1g=-35,ks1g=2
par thetarg=-70,krg=-2,taurg=30
par thetamg=-37,sigmamg=10
par thetang=-50,sigmang=14
par taun0g=0.05,taun1g=0.27,thng=-40,sng=-12
par thetahg=-58,sigmahg=-12
par tauh0g=0.05,tauh1g=0.27,thhg=-40,shg=-12
par k1g=30,kcag=3,epsg=0.0055
par phig=1,deltang=0.3,deltahg=0.1
par iapp=5, gsyng=0.4,vsyng=0,alphag=2,betag=0.14,abg=-20
par Igpe=0

#Opto params 2.3959
par Oeps=0.6518
par Gd=0.1385
par Gr=0.4296
par gOpen=2.4002
par wloss=1.1,lambda=560,Ilight=0
par opttot=10, optoff=5

# stn functions
sinf(v)=1./(1.+exp(-(v+thetas)/ss))
sinfca(v)=1./(1.+exp(-(v+thetas)/ssca))
minf(v)=1./(1.+exp(-(v+thetam)/sm))
hinf(v)=1./(1.+exp((v-thetah)/sh))
ninf(v)=1./(1.+exp((v-thetan)/sn))
taun(v)=taun0+taun1/(1+exp((v+thn)/sigman))
tauh(v)=tauh0+tauh1/(1+exp((v+thh)/sigmah))
rinf(v)=1/(1+exp((v-thetar)/kr))
taur(v)=taur0+taur1/(1+exp((v+thr)/sigmar))
tinf(v)=1/(1+exp((v-thetat)/kt))
rnew(r)=1/(1+exp((r-rth)/rsig))-1/(1+exp(-rth/rsig))

#Custom smooth heaviside function
par k_heav = 1000;
sheav(t,k_heav) = 1/(1+exp(-2*k_heav*t))


# gp functions
sinfg(vg)=1/(1+exp(-(vg-thetasg)/ksg))
sinf1g(vg)=1/(1+exp(-(vg-thetas1g)/ks1g))
rinfg(vg)=1/(1+exp(-(vg-thetarg)/krg))
minfg(vg)=1./(1.+exp(-(vg-thetamg)/sigmamg))
ninfg(vg)=1./(1.+exp(-(vg-thetang)/sigmang))
taung(vg)=taun0g+taun1g/(1+exp(-(vg-thng)/sng))
hinfg(vg)=1./(1.+exp(-(vg-thetahg)/sigmahg))
tauhg(vg)=tauh0g+tauh1g/(1+exp(-(vg-thhg)/shg))
hv(v)=1./(1.+exp(-v/.001))


# stn currents
il(v)=gl*(v-vl)
ina(v,h)=gna*(minf(v))^3*h*(v-vna)
ik(v,n)=gk*n^4*(v-vk)
iahp(v,ca)=gahp*(v-vk)*ca/(ca+k1)
ica(v)=gca*((sinfca(v))^2)*(v-vca)
it(v,r)=gt*(tinf(v)**3)*(rnew(r)^2)*(v-vca)
inphr(v,o)=gOpen*o*(v-vcl)
#i_act(t)= Ilight*sheav(t-5510,k_heav)*sheav(5610-t,k_heav)
i_act(t) = Ilight*sheav(mod(t,opttot)-optoff,k_heav)
###################################################################
circular structure
###################################################################
# synaptic currents from GPE to STN

isyn0=gsyn*(sg9+sg0+sg1)*(v0-vsyn)
isyn[1..8]=gsyn*(sg[j-1]+sg[j]+sg[j+1])*(v[j]-vsyn)
isyn9=gsyn*(sg8+sg9+sg0)*(v9-vsyn)


# gp currents
itg(vg,rg)=gtg*(sinfg(vg)^3)*rg*(vg-vcag)
inag(vg,hg)=gnag*(minfg(vg)^3)*hg*(vg-vnag)
ikg(vg,ng)=gkg*(ng^4)*(vg-vkg)
iahpg(vg,cag)=gahpg*(vg-vkg)*cag/(cag+k1g)
icag(vg)=gcag*((sinf1g(vg))^2)*(vg-vcag)
ilg(vg)=glg*(vg-vlg)


###########################################
# synaptic currents from STN to GPE
isyng[0..9]=gsyng*s[j]*(vg[j]-vsyng)

% noise
p noiseamp=0
wiener nove[0..9]


# stn initial conditions
#i V1=-78.,V2=-55.,H1=0.2,H2=0.08
#i N1=0.08,N2=0.4,R1=0.67,R2=0.38 
#i CA1=0.44,CA2=0.47,S1=0.001,S2=0.3
#i O1=0,D1=0,O2=0,D2=0

i V1=0,V2=0,H1=0,H2=0
i N1=0,N2=0,R1=0,R2=0 
i CA1=0,CA2=0,S1=0,S2=0
i O1=0,D1=0,O2=0,D2=0


# gp initial conditions
#i VG1=-16.,VG2=-69.,NG1=0.84,NG2=0.2
#i HG1=0.1,HG2=0.7,RG1=0.6,RG2=0.47
#i CAG1=0.068,CAG2=0.06,SG1=0.96,SG2=0.025

i VG1=0,VG2=0,NG1=0,NG2=0
i HG1=0,HG2=0,RG1=0,RG2=0
i CAG1=0,CAG2=0,SG1=0,SG2=0


# stn equations
v[0..9]'=-(il(v[j])+ina(v[j],h[j])+ik(v[j],n[j])+iahp(v[j],ca[j])+ica(v[j])+it(v[j],r[j])+inphr(v[j],o[j]))-isyn[j]+Istn + samp1*dir[j]*sin(freq1*(t) + noiseamp*nove[j]) 
#v[0..9]'=-(il(v[j])+ina(v[j],h[j])+ik(v[j],n[j])+iahp(v[j],ca[j])+ica(v[j])+it(v[j],r[j]))-isyn[j]+Istn + samp1*dir[j]*sin(freq1*(t) + noiseamp*nove[j]) 
h[0..9]'=phi*( hinf(v[j])-h[j] )/tauh(v[j])
n[0..9]'=phi*( ninf(v[j])-n[j] )/taun(v[j])
r[0..9]'=phir*(rinf(v[j])-r[j])/taur(v[j])
ca[0..9]'=eps*(-ica(v[j])-it(v[j],r[j]) - kca*ca[j])
s[0..9]'=alpha*(1-s[j])*sinf(v[j]+ab)-beta*s[j]
o[0..9]' = (Oeps*0.0006*lambda*i_act(t)/wloss)*(1-o[j]-d[j]) - (Gd*o[j])
d[0..9]' = Gd*o[j] - Gr*d[j]

# gp equations
vg[0..9]'= -(itg(vg[j],rg[j])+inag(vg[j],hg[j])+ikg(vg[j],ng[j])+iahpg(vg[j],cag[j])+icag(vg[j])+ilg(vg[j]))+iapp-isyng[j]+Igpe
ng[0..9]'= deltang*(ninfg(vg[j])-ng[j])/taung(vg[j])
hg[0..9]'= deltahg*(hinfg(vg[j])-hg[j])/tauhg(vg[j])
rg[0..9]'= phig*(rinfg(vg[j])-rg[j])/taurg
cag[0..9]'=epsg*(-icag(vg[j])-itg(vg[j],rg[j]) - kcag*cag[j])
sg[0..9]'=alphag*(1-sg[j])*sinfg(vg[j]+abg)-betag*sg[j]


# LFP
p weig=0.26

aux stnlfp0 = isyn0 + weig*(isyn9 + isyn1)
aux stnlfp[1..8] = isyn[j] + weig*(isyn[j-1]+isyn[j+1])
aux stnlfp9 = isyn9 + weig*(isyn8 + isyn0)

#only t,r0,r1,r2,r3,r4,r5,r6,r7,r8,r9,v0,v1,v2,v3,v4,v5,v6,v7,v8,v9,o0,o1,o2,o3,o4,o5,o6,o7,o8,o9,stnlfp0,stnlfp1,stnlfp2,stnlfp3,stnlfp4,stnlfp5,stnlfp6,stnlfp7,stnlfp8,stnlfp9

only t, v0

@ dt=.05,total=5999,njmp=1,meth=qualrk,xp=t,yp=v1,xlo=0,xhi=1000,ylo=-80,yhi=20.,bound=1000001,maxstor=1000001

done
